PsychoPy2experiment version="1.84.0rc5"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = example
  Units = use prefs
  Use version = latest
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image = resources/bird.jpg
      size = (0.5, 0.5)
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    CodeComponent code
      Begin Experiment:
        import subprocess
        import glob

        # Start QRSDetector as subprocess. Change port to correct one.
        p = subprocess.Popen(["python", "QRSDetector.py", "/dev/cu.usbmodem1411"], shell=False)

        # Initialize audio feedback setup.
        audio = sound.Sound(value='500', secs=0.2)

        # Initialize QRSDetector log file.
        qrs_log_file = max(glob.iglob('data/*.csv'), key=os.path.getctime)
        fin = open(qrs_log_file, "r")
      Begin Routine:
        # Initialize frame counter.
        counter = 0

        # Initialize internal clock.
        routine_clock = core.Clock()

        # Initialize procedure triger with delay.
        last_peak = 10000000
        did_trigger = False

        # Initialize QRS peaks routine counter.
        routine_peaks = 0
      End Routine:
        peak_detected = os.path.exists("flag.txt")
        if peak_detected:
            os.remove("flag.txt")

        # Log number of peaks detected in current routine.
        routine_peaks_string = "ROUTINE_PEAKS %d" % (routine_peaks)
        logging.log(level=logging.DATA, msg=routine_peaks_string)
      End Experiment:
        p.kill()
        fin.close()
      Each Frame:
        #Update frame counter.
        counter += 1

        # Log last qrs measurement in every frame.
        lines = fin.readlines()
        fin.seek(0)
        split_last_line = lines[-1].strip().split(" ")
        if len(split_last_line) == 4:
            string = "LOG %s %s %s %s" % (split_last_line[0], split_last_line[1], split_last_line[2], split_last_line[3])
            logging.log(level=logging.DATA, msg=string)
        elif len(lines) >= 2 and lines[-2].strip().split(" ") == 4:
            split_lastbutone_line = lines[-2].strip().split(" ")
            string = "LOG %s %s %s %s" % (split_lastbutone_line[0], split_lastbutone_line[1], split_lastbutone_line[2], split_lastbutone_line[3])
            logging.log(level=logging.DATA, msg=string)
        else:
            logging.log(level=logging.DATA, msg="No data")


        # Check if QRS peak was detected and trigger events if yes.
        peak_detected = os.path.exists("flag.txt")

        if peak_detected:
            # Test Psychopy logging for detection.
            logging.log(level=logging.DATA, msg="test")

            # Log detection frame.
            with open("flag.txt") as flag:
                line = flag.readline()
                logging.log(level=logging.DATA, msg="QRS " + line)

            # Play audio.
            audio.play()

            # Do whatever else.
            print "Peak detected!"

            # Setup delay triger.
            last_peak = routine_clock.getTime()
            did_trigger = False

            # Count routine peaks.
            routine_peaks += 1

            # Do not remove this.
            os.remove("flag.txt")

        # Trigger event after specified delay from last qrs detection.
        if routine_clock.getTime() - last_peak >= 0.013 and not did_trigger:
            print "BEEP"
            did_trigger = True
Flow
  Routine trial
